CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:cRel (?P<Site>[0-9]{1,2})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'Alexa': 'Site', 'Cytoplasm': 'Site', 'DNA': 'Site'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Alexa")
    Name to assign these images:Alexa
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Rhodamine")
    Name to assign these images:Cytoplasm
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,0.5
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:7|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
    Select the objects to filter:Nuclei
    Name the output objects:filteredNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.6
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
IdentifySecondaryObjects:[module_num:8|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
    Select the input objects:filteredNuclei
    Name the objects to be identified:cells
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:Cytoplasm
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:cells
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:10|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
    Select the objects to filter:cells
    Name the output objects:cellsFiltered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:1
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.7
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:100
    Filter using a maximum measurement value?:Yes
    Maximum value:500
    Select additional object to relabel:FilteredNuclei
    Name the relabeled objects:relabeledNuclei
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
IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:cellsFiltered
    Select the smaller identified objects:relabeledNuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:12|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
    Select object sets to measure:Cytoplasm
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:13|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
    Select the objects to filter:Cytoplasm
    Name the output objects:realCytoplasm
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:1
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:100
    Filter using a maximum measurement value?:Yes
    Maximum value:400
    Select additional object to relabel:relabeledNuclei
    Name the relabeled objects:relabeledNucleiWithCytoplasm
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
OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Alexa
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#339900
    Select objects to display:relabeledNucleiWithCytoplasm
    Select outline color:#CC3300
    Select objects to display:realCytoplasm

MeasureObjectIntensity:[module_num:15|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
    Select images to measure:Alexa
    Select objects to measure:realCytoplasm, relabeledNucleiWithCytoplasm

CalculateMath:[module_num:16|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
    Name the output measurement:nucCyt
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:relabeledNucleiWithCytoplasm
    Select the numerator measurement:Intensity_IntegratedIntensity_Alexa
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:realCytoplasm
    Select the denominator measurement:Intensity_IntegratedIntensity_Alexa
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:Yes
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
DisplayDataOnImage:[module_num:17|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
    Display object or image measurements?:Object
    Select the input objects:relabeledNucleiWithCytoplasm
    Measurement to display:Math_nucCyt
    Select the image on which to display the measurements:Alexa
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Times New Roman
    Use scientific notation?:No
    Font weight:normal

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|OneDrive - University of Brighton\\IFCellProfiler
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:relabeledNucleiWithCytoplasm|Math_nucCyt
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cRel ODN SUDHL8 23022024MyEx
    Overwrite existing files without warning?:No
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